<PlusConfiguration version="2.1">

  <DataCollection StartupDelaySec="1.0">
    <DeviceSet 
      Name="PlusServer: NDI Aurora tracker AirwayProjV2"
      Description="Broadcasting tool tracking data through OpenIGTLink
Tracking a single endoscope with two sensors and a two reference trackers.
The computer needs to be on the same local network as Aurora SCU unit. 
The scope tip tracker has to be plugged into the third slot, the scope ref tracker in the 4th slot, 
the neck reference tracker in the second slot, and the mouth ref tracker in the 1st slot."
    />
    <Device
      Id="TrackerDevice" 
      Type="AuroraTracker"
      SerialPort="4"
      ToolReferenceFrame="Tracker" >
      <DataSources>
		<DataSource Type="Tool" Id="Mouthreference" PortName="0" />
		<DataSource Type="Tool" Id="Neckreference" PortName="1" />
        <DataSource Type="Tool" Id="Tool" PortName="2" />
		<DataSource Type="Tool" Id="Toolbase" PortName="3" />
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Mouthreference" />
		  <DataSource Id="Neckreference" />
		  <DataSource Id="Tool" />
		  <DataSource Id="Toolbase" />
        </OutputChannel>
      </OutputChannels>
    </Device>
    <Device
      Id="CaptureDevice"
      Type="VirtualCapture"
      BaseFilename="RecordingTest.igs.mha"
      EnableCapturingOnStart="FALSE" >
      <InputChannels>
        <InputChannel Id="TrackerStream" />
      </InputChannels>
    </Device>
  </DataCollection>

  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18945" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackerStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRANSFORM" />
      </MessageTypes>
      <TransformNames> 
        <Transform Name="ToolToTracker" />
		<Transform Name="MouthreferenceToTracker" />
		<Transform Name="NeckreferenceToTracker" />
		<Transform Name="ToolToNeckreference" />
		<Transform Name="ToolbaseToTracker" />
      </TransformNames>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>

</PlusConfiguration>
